// dir-experiment = getDirectory("Choose the Experiment Directory ");
run("Metamorph nd file (stack builder)", "select=/Volumes/Untitled/imageJ-test/sscal.nd first=1 last=10 6=well1 all_timepoints all_positions open=[/Volumes/Untitled/imageJ-test/---Destination Folder---]");
run("Metamorph nd file (stack builder)", "select=/Volumes/Untitled/imageJ-test/exp.nd first=1 last=10 6=well1 all_timepoints all_positions open=[/Volumes/Untitled/imageJ-test/---Destination Folder---]");
run("Metamorph nd file (stack builder)", "select=/Volumes/Untitled/imageJ-test/wet-amb.nd first=1 last=10 6=well1 all_timepoints all_positions open=[/Volumes/Untitled/imageJ-test/---Destination Folder---]");
